WorkflowBuilder(Version=2.8.1)
ExternalizedMapping(Path(DisplayName=SessionPath))
-> Bonsai.IO.ReadAllText(Path=DataSchemas\ExampleSession.yml)
-> AsyncSubject RawSubjectSchema
-> AindInformationForagingDataSchema.AindBehaviorInformationForagingSession.DeserializeFromJson(Type=TypeMapping<AindInformationForagingDataSchema.AindBehaviorInformationForagingSession.AindInformationForagingSession>)
-> Take(Count=1)
-> AsyncSubject SubjectSchema

ExternalizedMapping(Path(DisplayName=RigPath))
-> Bonsai.IO.ReadAllText(Path=DataSchemas\ExampleSession.yml)
-> AsyncSubject RawRigSchema
-> AindInformationForagingDataSchema.AindBehaviorInformationForagingRig.DeserializeFromJson(Type=TypeMapping<AindInformationForagingDataSchema.AindBehaviorInformationForagingRig.AindInformationForagingRig>)
-> Take(Count=1)
-> AsyncSubject RigSchema

ExternalizedMapping(Path(DisplayName=TaskLogicPath))
-> Bonsai.IO.ReadAllText(Path=DataSchemas\ExampleSession.yml)
-> AsyncSubject RawTaskLogicSchema
-> AindInformationForagingDataSchema.AindBehaviorInformationForagingTask.DeserializeFromJson(Type=TypeMapping<AindInformationForagingDataSchema.AindBehaviorInformationForagingTask.AindInformationForagingTaskLogic>)
-> Take(Count=1)
-> AsyncSubject TaskLogicSchema

Annotation PinOut
  Text:
    | Function | HarpBehavior Pin | Notes |
    | --- | ----------- | ----------- |
    | Camera Trigger | DO0 |  |
    | Water Valve | Port0 Supply |  Use a poke breakout |
    | Lickometer | Port0 DI |  Use a poke breakout |
    | Encoder B | Port2 DIO | Use a poke breakout |
    | Encoder A | Port2 DI | Use a poke breakout |
    | Thermistor | ADC0 |  |
    | Pressure Sensor | ADC1 |  |
    | Photodiode | DI3 |  |
    | Servo Motor | DO2 |  |
    | Audio Buzzer | DO1 |  |
-> IncludeWorkflow(Path=Extensions\HarpBehaviorDevice.bonsai, StartExperimentSubjectName=StartExperiment)

Annotation(Text="")
-> GroupWorkflow Hardware
    GroupWorkflow ScreenConfiguration
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen)
        -> PropertyMapping(DisplayDevice(Selector=DisplayIndex), TargetRenderFrequency(Selector=TargetRenderFrequency), TargetUpdateFrequency(Selector=TargetUpdateFrequency))
        -> Bonsai.Shaders.CreateWindow
          Width=1000
          Height=1000
          Title=VrForaging
          VSync=Off
          SwapSync=false
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Resizable
          WindowState=Fullscreen
          DisplayDevice=Second
          TargetRenderFrequency=60
          TargetUpdateFrequency=120
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Shaders.ShaderResources
          Shaders
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=ScaledTexturedModel
              RenderState=""
              ShaderUniforms=""
              BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=textureDiffuse, TextureSlot=Texture0, TextureTarget=Texture2D))
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.TexturedModel.vert
              FragmentShader=Shaders\ScaledTexturedModel.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=AdjustQuadTexture
              RenderState=""
              ShaderUniforms=""
              BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D))
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.Quad.vert
              FragmentShader=Shaders\AdjustQuadTexture.frag
        -> Bonsai.Resources.LoadResources
        -> WorkflowOutput

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.CalibrationDirectory)
        -> PropertyMapping(Directory)
        -> IncludeWorkflow(Path=Extensions\LoadAllScreensCalibration.bonsai, Directory=Calibration\Monitors)
        -> Take(Count=1)
        -> AsyncSubject ScreenCalibration

        GroupWorkflow RenderLoop
            Bonsai.Shaders.RenderFrame
            -> PublishSubject RenderFrame => #1
            SubscribeSubject FarClipHorizon
            -> PropertyMapping(FarClip) => #3
            #1, #3 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1000, Light(X=0, Y=0, Z=0)) => #4
            -> MemberSelector(Selector=ViewMatrix)
            -> Bonsai.Shaders.RotateY(Order=Append, Angle=-3.14159274) => #6
            #6, #4 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as ViewMatrix,
                Item2.ProjectionMatrix as ProjectionMatrix,
                Item2.Light as Light)
            -> PublishSubject Draw3DStim
            -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Black, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #10
            SubscribeSubject ScreenCalibration
            -> MemberSelector(Selector=Right)
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #13
            #10, #13 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=-60.0001403060998, Z=0), Translation(X=20, Y=0, Z=-8))
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #15
            SubscribeSubject ScreenContrast
            -> PropertyMapping(Contrast) => #17
            #15, #17 -> IncludeWorkflow
              Path=Extensions\AdjustQuadTexture.bonsai
              ExtentX=1
              ExtentY=1
              LocationX=0
              LocationY=0
              Layer=1
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
              Contrast=1
              Brightness=0
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.6666667, Y=0, Width=0.333333, Height=1) => #19
            SubscribeSubject ScreenCalibration
            -> MemberSelector(Selector=Center)
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #22
            #10, #22 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-12.7))
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #24
            SubscribeSubject ScreenContrast
            -> PropertyMapping(Contrast) => #26
            #24, #26 -> IncludeWorkflow
              Path=Extensions\AdjustQuadTexture.bonsai
              ExtentX=1
              ExtentY=1
              LocationX=0
              LocationY=0
              Layer=1
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
              Contrast=1
              Brightness=0
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333333343, Y=0, Width=0.333333343, Height=1) => #28
            SubscribeSubject ScreenCalibration
            -> MemberSelector(Selector=Left)
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #31
            #10, #31 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=60.0001403060998, Z=0), Translation(X=-20, Y=0, Z=-8))
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #33
            SubscribeSubject ScreenContrast
            -> PropertyMapping(Contrast) => #35
            #33, #35 -> IncludeWorkflow
              Path=Extensions\AdjustQuadTexture.bonsai
              ExtentX=1
              ExtentY=1
              LocationX=0
              LocationY=0
              Layer=1
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
              Contrast=1
              Brightness=0
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333333343, Height=1) => #37
            #19, #28, #37 -> Zip
            -> PublishSubject PostDrawing

            FloatProperty(Value=1)
            -> Take(Count=1)
            -> BehaviorSubject ScreenContrast

            Annotation(Text="")
            -> GroupWorkflow SynchQuad
                BooleanProperty(Value=false)
                -> Take(Count=1) => #1
                Defer RandomInterval
                    SubscribeSubject RngSeed => #0
                    ExternalizedMapping(Lower, Upper) => #1
                    #0, #1 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=6)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime)
                    -> Bonsai.Shaders.Timer(DueTime=PT0S)
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Repeat
                -> ElementIndex
                -> MemberSelector(Selector=Index)
                -> Mod(Operand=IntProperty(Value=2))
                -> Equal(Operand=IntProperty(Value=1)) => #7
                #1, #7 -> Concat
                -> BehaviorSubject SynchQuadColor

                SubscribeSubject PostDrawing
                -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
                -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=0, Right=3, Bottom=0, Top=1) => #12
                SubscribeSubject RenderFrame
                -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
                -> Accumulate
                -> ElementIndex => #16
                #12, #16 -> Zip => #17
                SubscribeSubject SynchQuadColor
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #19
                  Expression: it ? 1.0 : 0.0
                #17, #19 -> WithLatestFrom => #20
                -> InputMapping(SynchQuadValue(Selector=Item2), FrameIndex(Selector=Item1.Item2.Index), FrameTimestamp(Selector=Item1.Item2.Value))
                -> SelectMany CreateRenderSynchState
                    ExternalizedMapping(SynchQuadValue, FrameIndex, FrameTimestamp)
                    -> AllenNeuralDynamics.Core.Logging.RenderSynchState
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> BehaviorSubject RendererSynchState => #23
                #20 -> MemberSelector(Selector=Item1.Item1) => #24
                #23, #24 -> Zip => #25
                -> InputMapping(Selector=Item2, ColorG(Selector=Item1.SynchQuadValue), ColorR(Selector=Item1.SynchQuadValue), ColorB(Selector=Item1.SynchQuadValue))
                -> IncludeWorkflow => #27
                  Path=BonVision:Primitives.DrawQuad.bonsai
                  ExtentX=0.045
                  ExtentY=0.08
                  LocationX=2.925
                  LocationY=0.03
                  Layer=10
                  Angle=0
                  ColorR=1
                  ColorG=1
                  ColorB=1
                  ColorA=1
                #25 -> MemberSelector(Selector=Item1.FrameIndex)
                -> Bonsai.Scripting.Expressions.ExpressionTransform Mod2 => #29
                  Expression: (it % 2).Value
                #25 -> MemberSelector(Selector=Item2) => #30
                #29, #30 -> Zip
                -> InputMapping(Selector=Item2, ColorG(Selector=Item1), ColorR(Selector=Item1), ColorB(Selector=Item1))
                -> IncludeWorkflow => #33
                  Path=BonVision:Primitives.DrawQuad.bonsai
                  ExtentX=0.045
                  ExtentY=0.045
                  LocationX=2.925
                  LocationY=0.15
                  Layer=10
                  Angle=0
                  ColorR=1
                  ColorG=1
                  ColorB=1
                  ColorA=1
                #27, #33 -> Zip

        GroupWorkflow LoadTextureBank
            SubscribeSubject TextureBankPath
            -> PropertyMapping(Path)
            -> Bonsai.IO.GetFiles(Path=Textures, SearchPattern=*.jpg, SearchOption=TopDirectoryOnly)
            -> Merge
            -> CreateObservable LoadTexture
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject TexturePath

                SubscribeSubject TexturePath
                -> Bonsai.IO.GetFileNameWithoutExtension => #4
                SubscribeSubject TexturePath
                -> PropertyMapping(FileName)
                -> Bonsai.Shaders.LoadImage => #7
                  Width=nil
                  Height=nil
                  InternalFormat=Rgba
                  WrapS=Repeat
                  WrapT=Repeat
                  MinFilter=Linear
                  MagFilter=Linear
                  FileName=Textures\wall_4.jpg
                  ColorType=Unchanged
                  FlipMode=Vertical
                #4, #7 -> Zip
                -> WorkflowOutput
            -> Merge
            -> ToDictionary(KeySelector=Item1, ElementSelector=Item2)
            -> AsyncSubject TextureBank
    -> DelaySubscription(DueTime=PT2S)

    GroupWorkflow HarpDevices
        Annotation PinOut(Text="")
        -> IncludeWorkflow(Path=Extensions\HarpOlfactometerDevice.bonsai, StartExperimentSubjectName=StartExperiment)

        Annotation PinOut(Text="")
        -> IncludeWorkflow(Path=Extensions\HarpLickometerDevice.bonsai, StartExperimentSubjectName=StartExperiment)

        Annotation PinOut(Text="")
        -> IncludeWorkflow(Path=Extensions\HarpClockSynchronizerDevice.bonsai, StartExperimentSubjectName=StartExperiment)

        IncludeWorkflow(Path=Extensions\HarpAnalogInputDevice.bonsai, StartExperimentSubjectName=StartExperiment) => #6
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput)
        -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #9
        #6, #9 -> SubscribeWhen

    GroupWorkflow Cameras
        GroupWorkflow MainCamera
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=FaceCamera.FrameRate)
            -> Take(Count=1)
            -> AsyncSubject CameraFrameRate

            SubscribeSubject CameraFrameRate
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera0Frequency)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject HarpBehaviorEvents
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #9
            -> MemberSelector(Selector=Value)
            -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> Condition => #13
                WorkflowInput Source1
                -> WorkflowOutput
            #13, #9 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Seconds)
            -> PublishSubject FrameEvent

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=FaceCamera)
            -> PropertyMapping
              SerialNumber(Selector=SerialNumber)
              ExposureTime(Selector=Exposure)
              Gain(Selector=Gain)
              Binning(Selector=Binning)
              ColorProcessing(Selector=ColorProcessing)
            -> AllenNeuralDynamics.Core.AindSpinnakerCapture(Index=nil, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1) => #20
            SubscribeSubject FrameEvent => #21
            #20, #21 -> Zip
            -> Bonsai.Harp.CreateTimestamped
            -> PublishSubject FaceCameraFrameEvent

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=TopBodyCamera)
            -> PropertyMapping
              SerialNumber(Selector=SerialNumber)
              ExposureTime(Selector=Exposure)
              Gain(Selector=Gain)
              Binning(Selector=Binning)
              ColorProcessing(Selector=ColorProcessing)
            -> AllenNeuralDynamics.Core.AindSpinnakerCapture(Index=nil, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1) => #28
            SubscribeSubject FrameEvent => #29
            #28, #29 -> Zip
            -> Bonsai.Harp.CreateTimestamped => #31
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=TopBodyCamera)
            -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #34
            #31, #34 -> SubscribeWhen
            -> PublishSubject TopBodyCameraFrameEvent

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=SideBodyCamera)
            -> PropertyMapping
              SerialNumber(Selector=SerialNumber)
              ExposureTime(Selector=Exposure)
              Gain(Selector=Gain)
              Binning(Selector=Binning)
              ColorProcessing(Selector=ColorProcessing)
            -> AllenNeuralDynamics.Core.AindSpinnakerCapture(Index=nil, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1) => #40
            SubscribeSubject FrameEvent => #41
            #40, #41 -> Zip
            -> Bonsai.Harp.CreateTimestamped => #43
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=SideBodyCamera)
            -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #46
            #43, #46 -> SubscribeWhen
            -> PublishSubject SideBodyCameraFrameEvent

        GroupWorkflow AuxiliaryCameras
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=AuxiliaryCamera0.Index)
            -> PropertyMapping(Index)
            -> Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="") => #3
            SubscribeSubject HarpTimestampSource => #4
            #3, #4 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped => #6
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=AuxiliaryCamera0)
            -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #9
            #6, #9 -> SubscribeWhen
            -> PublishSubject AuxiliaryCamera0

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=AuxiliaryCamera1.Index)
            -> PropertyMapping(Index)
            -> Bonsai.Video.VideoCaptureDevice(Index=1, CaptureProperties="") => #15
            SubscribeSubject HarpTimestampSource => #16
            #15, #16 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped => #18
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=AuxiliaryCamera1)
            -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #21
            #18, #21 -> SubscribeWhen
            -> PublishSubject AuxiliaryCamera1

SubscribeSubject HarpBehaviorEvents
-> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
-> Harp.Behavior.FilterRegister(FilterType=Include, Register=Harp.Behavior.AnalogData)
-> BehaviorSubject HarpTimestampSource

GroupWorkflow SessionSettings
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Screen.TextureAssetsDirectory)
    -> PropertyMapping(Value)
    -> PropertySource<Bonsai.IO.GetFiles,System.String>(MemberName=Path, Value=Textures)
    -> Take(Count=1)
    -> AsyncSubject TextureBankPath

    Annotation(Text="A small value that is used to sum to the visual horizon to instantiate resources.")
    -> FloatProperty(Value=0)
    -> Take(Count=1)
    -> AsyncSubject SigmaZ

    ExternalizedMapping(Value(DisplayName=FarClipHorizon))
    -> FloatProperty(Value=1000)
    -> Take(Count=1)
    -> AsyncSubject FarClipHorizon

    Annotation(Text="The distance used to determine whether a segment should be disposed.") => #29
    ExternalizedMapping(Value(DisplayName=DisposingTreshold)) => #30
    #29, #30 -> FloatProperty(Value=20)
    -> Take(Count=1)
    -> AsyncSubject DisposingTreshold

    SubscribeSubject SubjectSchema
    -> PropertyMapping(Subject(Selector=Subject), RootFolder(Selector=RootPath))
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateRootLoggingPath.bonsai, RootFolder=C:\data\, Subject=672102, SubjectName=LoggingRootPath)
    -> Take(Count=1)
    -> AsyncSubject CompoundRootPath

GroupWorkflow Initialization
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<AindVrForagingDataSchema.AindVrForagingTask.VirtualSite> ActiveSite
    BehaviorSubject<AllenNeuralDynamics.Core.Logging.SoftwareEvent> SoftwareEvent
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<System.String> Annotations

    BooleanProperty(Value=false)
    -> Take(Count=1) => #7
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #10
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #13
    #7, #10, #13 -> Merge
    -> BehaviorSubject ExperimentState

GroupWorkflow HardwareChecks
    GroupWorkflow ProtocolValidation => #0
        SubscribeSubject Repository
        -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
        -> BitwiseNot => #2
        SubscribeSubject SubjectSchema
        -> MemberSelector(Selector=AllowDirtyRepo) => #4
        #2, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform AllowDirty?
          Expression: Item2 ? False : Item1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.ThrowException(Message="Repository is not clean! Please discard all local changes.")

        SubscribeSubject RigSchema
        -> MemberSelector(Selector="FaceCamera.FrameRate,FaceCamera.Exposure")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: ((1.0 / Item1) * 1000000) < Item2 + 1000
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> AllenNeuralDynamics.Core.ThrowException(Message="Camera frame rate and exposure settings are not compatible.")

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=WaterValve)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it == null
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.ThrowException(Message="No water valve calibration settings found!")

        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=OperationControl.OdorControl.UseChannel3AsCarrier)
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany SampleFlow
            SubscribeSubject StartExperiment
            -> Take(Count=1) => #1
            SubscribeSubject HarpOlfactometerEvents
            -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.TimestampedChannel3ActualFlow)
            -> MemberSelector(Selector=Value) => #4
            ExternalizedMapping(Value(DisplayName=LowFlowThreshold)) => #5
            #4, #5 -> LessThan(Operand=FloatProperty(Value=950)) => #6
            #6, #4 -> Zip => #7
            #1, #7 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Take(Count=1)
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2)
        -> Format(Format="Flow on Channel3 is lower than expected. Reading {0}.", Selector=it)
        -> InputMapping(Selector=it, Message(Selector=it))
        -> AllenNeuralDynamics.Core.ThrowException(Message="Flow on Channel3 is lower than expected.")
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=SkipHardwareValidation)
    -> BitwiseNot
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #0, #4 -> SubscribeWhen
    -> Bonsai.Shaders.DelaySubscription(DueTime=PT2S)
    -> WorkflowOutput

Annotation Defer(Text="Defer just to keep the variable polution a bit more contained")
-> Defer Logging => #30
    GroupWorkflow HarpLogging
        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.FilterVisibility
        -> Harp.Behavior.GroupByRegister => #2
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=Behavior.harp, Extension=bin)
        -> PropertyMapping(FileName) => #4
        #2, #4 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)
        -> WorkflowOutput

        SubscribeSubject HarpOlfactometerEvents
        -> Harp.Olfactometer.FilterVisibility
        -> Harp.Olfactometer.GroupByRegister => #9
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=Olfactometer.harp, Extension=bin)
        -> PropertyMapping(FileName) => #11
        #9, #11 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplitLickDetector.GroupByRegister => #14
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=Lickometer.harp, Extension=bin)
        -> PropertyMapping(FileName) => #16
        #14, #16 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

        SubscribeSubject HarpClockGenEvents
        -> Harp.TimestampGeneratorGen3.GroupByRegister => #19
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=ClockGenerator.harp, Extension=bin)
        -> PropertyMapping(FileName) => #21
        #19, #21 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

        SubscribeSubject HarpAnalogInputEvents
        -> Bonsai.Harp.FilterRegister(FilterType=Exclude, Register=Bonsai.Harp.FilterRegisterAddress(Address=15))
        -> Bonsai.Harp.GroupByRegister => #25
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=AnalogInput.harp, Extension=bin)
        -> PropertyMapping(FileName) => #27
        #25, #27 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil) => #28
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput)
        -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #31
        #28, #31 -> SubscribeWhen

    GroupWorkflow Camera
        IncludeWorkflow FaceCameraFrameEvent(Path=Extensions\CameraLogger.bonsai, LogName=FaceCamera)
        IncludeWorkflow TopBodyCameraFrameEvent(Path=Extensions\CameraLogger.bonsai, LogName=TopBodyCamera)
        IncludeWorkflow SideBodyCameraFrameEvent(Path=Extensions\CameraLogger.bonsai, LogName=SideBodyCamera)

    GroupWorkflow ConfigSchemaLogging
        SubscribeSubject SubjectSchema
        -> AindInformationForagingDataSchema.AindBehaviorInformationForagingSession.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, LogName=Subject, DeviceName=Config, Extension=json)

        SubscribeSubject TaskLogicSchema
        -> AindInformationForagingDataSchema.AindBehaviorInformationForagingTask.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, LogName=TaskLogic, DeviceName=Config, Extension=json)

        SubscribeSubject RigSchema
        -> AindInformationForagingDataSchema.AindBehaviorInformationForagingRig.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, LogName=Rig, DeviceName=Config, Extension=json)

        SubscribeSubject RawRigSchema
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, LogName=RawRig, DeviceName=Config, Extension=json)

        SubscribeSubject RawSubjectSchema
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, LogName=RawSubject, DeviceName=Config, Extension=json)

        SubscribeSubject RawTaskLogicSchema
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, LogName=RawTaskLogic, DeviceName=Config, Extension=json)

    GroupWorkflow Render
        SubscribeSubject RendererSynchState
        -> Bonsai.Scripting.Expressions.ExpressionTransform Label
          Expression:
            new(
            it.FrameIndex.Value as FrameIndex,
            it.FrameTimestamp.Value as FrameTimestamp,
            it.SynchQuadValue.Value as SynchQuadValue)
        -> IncludeWorkflow
          Path=AllenNeuralDynamics.Core:LogCsv.bonsai
          LogName=RendererSynchState
          DeviceName=Renderer
          Extension=csv
          OmitHeader=false
          Delimiter=nil
          SubjectName=LoggingRootPath

    GroupWorkflow SoftwareEvents
        SubscribeSubject SoftwareEvent
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #1
        SubscribeSubject RendererSynchState
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #3
        #1, #3 -> WithLatestFrom
        -> AllenNeuralDynamics.Core.Logging.FramestampSoftwareEvent => #5
        SubscribeSubject HarpTimestampSource
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #7
        #5, #7 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath)
        -> WorkflowOutput

        SubscribeSubject Annotations
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=Annotations)
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #15
        SubscribeSubject RendererSynchState
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #17
        #15, #17 -> WithLatestFrom
        -> AllenNeuralDynamics.Core.Logging.FramestampSoftwareEvent => #19
        SubscribeSubject HarpTimestampSource
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #21
        #19, #21 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=Annotations, SubjectName=LoggingRootPath)

        GroupWorkflow Metadata
            SubscribeSubject Repository
            -> MemberSelector(Selector=Head)
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=RepositoryStatus)
            -> MulticastSubject SoftwareEvent

            SubscribeSubject RngSeedValue
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=RngSeed)
            -> MulticastSubject SoftwareEvent

    GroupWorkflow OperationControl
        SubscribeSubject CurrentPosition
        -> MemberSelector(Selector="Seconds,Value.Z")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as Seconds,
            Item2 as Position)
        -> Defer LogCsv
            WorkflowInput Source1
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogCsv.bonsai
              LogName=CurrentPosition
              DeviceName=OperationControl
              Extension=csv
              OmitHeader=false
              Delimiter=nil
              SubjectName=LoggingRootPath
            -> WorkflowOutput

        SubscribeSubject IsStopped
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Seconds as Seconds,
            Value as IsStopped)
        -> Defer LogCsv
            WorkflowInput Source1
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogCsv.bonsai
              LogName=IsStopped
              DeviceName=OperationControl
              Extension=csv
              OmitHeader=false
              Delimiter=nil
              SubjectName=LoggingRootPath
            -> WorkflowOutput

    GroupWorkflow Logs
        SubscribeSubject EndExperiment
        -> StringProperty(Value=ExperimentCompleted)
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=SoftwareEvent) => #2
        SubscribeSubject HarpTimestampSource => #3
        #2, #3 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
        -> AllenNeuralDynamics.Core.Logging.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, LogName=EndSession, DeviceName=config, Extension=json)
SubscribeSubject EndExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S) => #32
#30, #32 -> TakeUntil => #33
SubscribeSubject StartLogging => #34
#33, #34 -> SubscribeWhen

Annotation(Text="")
-> GroupWorkflow OperationControl
    GroupWorkflow PositionControl => #0
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=OperationControl)
        -> MemberSelector(Selector=PositionControl.VelocityThreshold)
        -> BehaviorSubject StopVelocityThreshold

        SubscribeSubject StopVelocityThreshold
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=StopVelocityTreshold)
        -> MulticastSubject SoftwareEvent

        GroupWorkflow InitialPosition => #7
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=OperationControl)
            -> MemberSelector(Selector=PositionControl.InitialPosition)
            -> MemberSelector(Selector=Z) => #3
            -> DoubleProperty(Value=0) => #4
            #3, #4 -> Zip
            -> Bonsai.Harp.CreateTimestamped
            -> Take(Count=1)
            -> WorkflowOutput
        SubscribeSubject EncoderData => #8
        #7, #8 -> Concat => #9
        -> MemberSelector(Selector=Value)
        -> Accumulate
        -> InputMapping(Z(Selector=it)) => #12
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=OperationControl.PositionControl.InitialPosition)
        -> PropertyMapping(X(Selector=X), Y(Selector=Y)) => #15
        #12, #15 -> Bonsai.Shaders.CreateVector3(X=0, Y=4, Z=-1) => #16
        #9 -> MemberSelector(Selector=Seconds) => #17
        #16, #17 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> BehaviorSubject CurrentPosition

        SubscribeSubject EncoderData => #22
        -> MemberSelector(Selector=Value) => #23
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=OperationControl)
        -> MemberSelector(Selector=PositionControl.FrequencyFilterCutoff)
        -> PropertyMapping(Cutoff1) => #27
        #23, #27 -> Bonsai.Dsp.FrequencyFilter(SampleRate=1000, Cutoff1=5, Cutoff2=0, KernelLength=60, FilterType=LowPass)
        -> Bonsai.Scripting.Expressions.ExpressionTransform cm/second
          Expression: it * 1000
        -> PublishSubject CurrentVelocity => #30
        SubscribeSubject StopVelocityThreshold
        -> PropertyMapping(Value) => #32
        #30, #32 -> LessThan(Operand=DoubleProperty(Value=10))
        -> DistinctUntilChanged => #34
        #22 -> MemberSelector(Selector=Seconds) => #35
        #34, #35 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> BehaviorSubject IsStopped

        SubscribeSubject CurrentPosition
        -> MemberSelector(Selector=Value) => #41
        Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-100000)
        -> Take(Count=1) => #43
        #41, #43 -> Scan => #44
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Accumulation.Z > Value.Z ? Accumulation : Value
            -> WorkflowOutput
        Annotation "Max(Z)"(Text="") => #45
        #44, #45 -> BehaviorSubject MaxPosition
    SubscribeSubject StartExperiment => #1
    #0, #1 -> SubscribeWhen

    GroupWorkflow OdorControl
        GroupWorkflow OlfactometerInitialConfiguration
            SubscribeSubject HarpOlfactometerEvents
            -> Take(Count=1) => #1
            GroupWorkflow Channel3Setting
                SubscribeSubject TaskLogicSchema
                -> MemberSelector(Selector=OperationControl.OdorControl.UseChannel3AsCarrier) => #1
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate1000) => #3
                #1 -> BitwiseNot
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate100) => #6
                #3, #6 -> Merge
                -> WorkflowOutput
            -> PropertyMapping(Channel3Range) => #3
            #1, #3 -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannel3RangePayload(Channel3Range=FlowRate1000))
            -> MulticastSubject HarpOlfactometerCommands
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableEventsPayload(EnableEvents="Flowmeter DI0Trigger ChannelActualFlow"))
            -> MulticastSubject HarpOlfactometerCommands
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Enabled))
            -> MulticastSubject HarpOlfactometerCommands
            -> WorkflowOutput

            GroupWorkflow Channel3Setting
                SubscribeSubject TaskLogicSchema
                -> MemberSelector(Selector=OperationControl.OdorControl.UseChannel3AsCarrier) => #1
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate1000) => #3
                #1 -> BitwiseNot
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate100) => #6
                #3, #6 -> Merge
                -> WorkflowOutput
            -> Equal(Operand=WorkflowProperty<Harp.Olfactometer.Channel3RangeConfig>(Value=FlowRate1000))
            -> Condition => #13
                WorkflowInput Source1
                -> WorkflowOutput
            SubscribeSubject HarpOlfactometerEvents
            -> Take(Count=1) => #15
            #13, #15 -> Zip
            -> CreateOdorMix => #17
              channel3AsCarrier=true
              PercentageChannel0=0
              PercentageChannel1=0
              PercentageChannel2=0
              PercentageChannel3=NaN
              Channel3AsCarrier=true
              TargetOdorFlow=100
              TotalFlow=1000
            -> MemberSelector(Selector=ChannelsTargetFlow) => #18
            #17 -> MemberSelector(Selector=OdorValveState) => #19
            #18, #19 -> Merge
            -> MulticastSubject HarpOlfactometerCommands

        GroupWorkflow ArmOdor
            BehaviorSubject<AindVrForagingDataSchema.AindVrForagingTask.OdorSpecification> ArmOdor

            SubscribeSubject ArmOdor
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=ArmOdor)
            -> MulticastSubject SoftwareEvent

            SubscribeSubject ArmOdor => #4
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=OperationControl.OdorControl.UseChannel3AsCarrier)
            -> PropertyMapping(Channel3AsCarrier) => #7
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=OperationControl.OdorControl.TargetOdorFlow)
            -> PropertyMapping(TargetOdorFlow) => #10
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=OperationControl.OdorControl.TargetTotalFlow)
            -> PropertyMapping(TotalFlow) => #13
            #4, #7, #10, #13 -> CreateOdorMix => #14
              channel3AsCarrier=false
              PercentageChannel0=0
              PercentageChannel1=0
              PercentageChannel2=0
              PercentageChannel3=0
              Channel3AsCarrier=false
              TargetOdorFlow=100
              TotalFlow=1000
            -> MemberSelector(Selector=ChannelsTargetFlow) => #15
            #14 -> MemberSelector(Selector=OdorValveState) => #16
            #15, #16 -> Merge
            -> MulticastSubject HarpOlfactometerCommands

        GroupWorkflow EndValveControl
            SubscribeSubject HarpOlfactometerEvents
            -> Take(Count=1)
            -> BooleanProperty(Value=false)
            -> BehaviorSubject OdorEndValveState

            SubscribeSubject OdorEndValveState => #4
            -> Condition OdorPath
                WorkflowInput Source1
                -> WorkflowOutput
            -> PropertySource<Harp.Olfactometer.CreateEndValvesStatePayload,Harp.Olfactometer.EndValves>(MemberName=EndValvesState, Value=EndValve0) => #6
            #4 -> BitwiseNot
            -> Condition CarrierPath
                WorkflowInput Source1
                -> WorkflowOutput
            -> PropertySource<Harp.Olfactometer.CreateEndValvesStatePayload,Harp.Olfactometer.EndValves>(MemberName=EndValvesState, Value=None) => #9
            #6, #9 -> Merge
            -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.EndValveState)
            -> MulticastSubject HarpOlfactometerCommands

    GroupWorkflow RewardControl
        GroupWorkflow WaterValve
            BehaviorSubject<System.Double> ValveOpenTimeMs
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
            -> MulticastSubject HarpBehaviorCommands

            BehaviorSubject<System.Reactive.Unit> TriggerValve
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
            -> MulticastSubject HarpBehaviorCommands
            -> WorkflowOutput

        BonVision.OptionalFloatProperty(Value=0, HasValue=true)
        -> Take(Count=1)
        -> BehaviorSubject GiveReward

        SubscribeSubject GiveReward
        -> PublishSubject HotGiveReward

        SubscribeSubject GiveReward
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Condition GreaterThan0 => #9
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=WaterValve) => #11
        #9, #11 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime
          Expression: (Item1 - Item2.CalibrationIntercept) / Item2.CalibrationSlope
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> InputMapping(Value(Selector=it))
        -> IntProperty(Value=0)
        -> Condition GreaterThan0
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MulticastSubject ValveOpenTimeMs
        -> Unit
        -> MulticastSubject TriggerValve

        SubscribeSubject GiveReward
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value) => #23
        FloatProperty(Value=0) => #24
        #23, #24 -> Merge
        -> Accumulate
        -> BehaviorSubject SessionAccumulatedReward

        SubscribeSubject GiveReward
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=GiveReward)
        -> MulticastSubject SoftwareEvent

    GroupWorkflow MovableSpoutControl

    GroupWorkflow FeedbackControl
        BehaviorSubject<System.Reactive.Unit> ChoiceFeedback

        SubscribeSubject ChoiceFeedback
        -> PublishSubject HotChoiceFeedback

        SubscribeSubject ChoiceFeedback
        -> Unit
        -> MulticastSubject AudioTrigger
        -> WorkflowOutput

        SubscribeSubject ChoiceFeedback
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=ChoiceFeedback)
        -> MulticastSubject SoftwareEvent

    GroupWorkflow Lickometer
        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplitLickDetector.Parse(Register=AllenNeuralDynamics.LicketySplitLickDetector.TimestampedLickState) => #1
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplitLickDetector.LickChannels>(Value=Channel0))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> DistinctUntilChanged => #5
        #5, #1 -> WithLatestFrom
        -> PublishSubject LickometerState
        -> Condition IsLickOnset
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LickEvent

        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplitLickDetector.Parse(Register=AllenNeuralDynamics.LicketySplitLickDetector.Channel0UntriggerThreshold)
        -> BehaviorSubject LickometerUntriggerThreshold

        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplitLickDetector.Parse(Register=AllenNeuralDynamics.LicketySplitLickDetector.Channel0TriggerThreshold)
        -> BehaviorSubject LickometerTriggerThreshold

        SubscribeSubject HarpLickometerEvents
        -> Bonsai.Harp.CreateMessage
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=Off, OperationLed=Off, Heartbeat=Enabled)
        -> Take(Count=1)
        -> MulticastSubject HarpLickometerCommands

        BehaviorSubject<System.Boolean> IncrementLickometerTrigger
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1 : -1"
          Expression: it ? 1 : -1
        -> SelectMany Offset
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Offset

            SubscribeSubject LickometerTriggerThreshold
            -> Take(Count=1) => #4
            SubscribeSubject Offset => #5
            #4, #5 -> CombineLatest
            -> Add
            -> WorkflowOutput
        -> AllenNeuralDynamics.LicketySplitLickDetector.Format(MessageType=Write, Register=AllenNeuralDynamics.LicketySplitLickDetector.Channel0TriggerThreshold)
        -> MulticastSubject HarpLickometerCommands

        BehaviorSubject<System.Boolean> IncrementLickometerUntrigger
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1 : -1"
          Expression: it ? 1 : -1
        -> SelectMany Offset
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Offset

            SubscribeSubject LickometerUntriggerThreshold
            -> Take(Count=1) => #4
            SubscribeSubject Offset => #5
            #4, #5 -> CombineLatest
            -> Add
            -> WorkflowOutput
        -> AllenNeuralDynamics.LicketySplitLickDetector.Format(MessageType=Write, Register=AllenNeuralDynamics.LicketySplitLickDetector.Channel0UntriggerThreshold)
        -> MulticastSubject HarpLickometerCommands

    GroupWorkflow CameraControl
        SubscribeSubject HarpBehaviorHeartBeat
        -> Take(Count=1)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0))
        -> MulticastSubject HarpBehaviorCommands

    GroupWorkflow Thermistor/Pressure
        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> PublishSubject AnalogData

        SubscribeSubject AnalogData
        -> MemberSelector(Selector="Value.AnalogInput0,Seconds")
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject ThermistorData

        SubscribeSubject AnalogData
        -> MemberSelector(Selector="Value.AnalogInput1,Seconds")
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject PressureSensorData

    GroupWorkflow WheelEncoder
        SubscribeSubject AnalogData
        -> MemberSelector(Selector="Value.Encoder,Seconds") => #1
        -> MemberSelector(Selector=Item1) => #2
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Treadmill.WheelDiameter)
        -> Bonsai.Scripting.Expressions.ExpressionTransform Perimeter => #5
          Expression: it * Math.Pi
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Treadmill.PulsesPerRevolution) => #7
        #5, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform CentimetersPerTick => #9
          Expression: Item1 / Item2
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Treadmill.InvertDirection) => #11
        #9, #11 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item2 ? -1.0 * Item1 : Item1
        -> PropertyMapping(RangeMax) => #14
        #2, #14 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=-0.005752427954571154, RescaleType=Linear) => #15
        #1 -> MemberSelector(Selector=Item2) => #16
        #15, #16 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject EncoderData

        SubscribeSubject HarpBehaviorHeartBeat => #20
        Annotation "Set displacement mode"(Text=https://github.com/harp-tech/device.behavior/pull/12) => #21
        #20, #21 -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=83, PayloadType=U8, Value=1))
        -> MulticastSubject HarpBehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableEncodersPayload(EnableEncoders=EncoderPort2))
        -> Take(Count=1)
        -> MulticastSubject HarpBehaviorCommands

    GroupWorkflow AudioControl
        BehaviorSubject<System.Double> AudioDuration
        -> Multiply(Operand=IntProperty(Value=1000))
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO1)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Int32> AudioFrequency
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PwmFrequencyDO1)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Reactive.Unit> AudioTrigger
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO1))
        -> MulticastSubject HarpBehaviorCommands

        GroupWorkflow InitialSettings => #10
            SubscribeSubject HarpBehaviorHeartBeat
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO1Payload(PwmDutyCycleDO1=50))
            -> Take(Count=1)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=OperationControl.AudioControl)
            -> MemberSelector(Selector=Duration)
            -> MulticastSubject AudioDuration

            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=OperationControl.AudioControl)
            -> MemberSelector(Selector=Frequency)
            -> MulticastSubject AudioFrequency
        SubscribeSubject HarpBehaviorHeartBeat
        -> Take(Count=1) => #12
        #10, #12 -> SubscribeWhen

GroupWorkflow TaskLogic => #38
SubscribeSubject EndExperiment => #39
#38, #39 -> TakeUntil => #40
SubscribeSubject StartExperiment => #41
#40, #41 -> SubscribeWhen

Disable GroupWorkflow DebugTools
    GroupWorkflow RenderStateQuad
        SubscribeSubject PostDrawing
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #2
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label)
        -> Equal(Operand=StringProperty(Value=InterPatchSite))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
          Expression: it ? 255 : 0
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label) => #8
        -> Equal(Operand=StringProperty(Value=GapSite)) => #9
        #8 -> Equal(Operand=StringProperty(Value=InitialGapSite)) => #10
        #9, #10 -> Zip
        -> BitwiseOr
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
          Expression: it ? 255 : 0
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label)
        -> Equal(Operand=StringProperty(Value=RewardSite))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #17
          Expression: it ? 255 : 0
        #6, #13, #17 -> Zip
        -> PropertyMapping(ColorR(Selector=Item1), ColorG(Selector=Item2), ColorB(Selector=Item3)) => #19
        #2, #19 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.2
          ExtentY=0.2
          LocationX=0.9
          LocationY=0.9
          Layer=100
          Angle=0
          ColorR=0
          ColorG=255
          ColorB=0
          ColorA=1
        -> WorkflowOutput

GroupWorkflow StartCondition
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut => #0
    SubscribeSubject TextureBank => #1
    #0, #1 -> Zip
    -> Take(Count=1)
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject StartLogging => #5
    ExternalizedMapping(DueTime(DisplayName=LogDelay)) => #6
    #5, #6 -> Bonsai.Shaders.Delay(DueTime=PT3S)
    -> Bonsai.Shaders.SampleOnUpdateFrame
    -> MulticastSubject StartExperiment
    -> WorkflowOutput

SubscribeSubject EndExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S)
-> SelectMany EndRoutine
    CreateOdorMix
      channel3AsCarrier=true
      PercentageChannel0=0
      PercentageChannel1=0
      PercentageChannel2=0
      PercentageChannel3=NaN
      Channel3AsCarrier=true
      TargetOdorFlow=100
      TotalFlow=1000
    -> Take(Count=1) => #1
    -> MemberSelector(Selector=ChannelsTargetFlow) => #2
    #1 -> MemberSelector(Selector=OdorValveState) => #3
    #2, #3 -> Merge
    -> MulticastSubject HarpOlfactometerCommands
    -> Last
    -> BooleanProperty(Value=false)
    -> MulticastSubject OdorEndValveState
    -> WorkflowOutput

    SubscribeSubject LoggingRootPath
    -> PropertyMapping(Source) => #11
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RemotePath)
    -> Condition NotNull
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.StripDirectoryPath => #15
    SubscribeSubject CompoundRootPath
    -> MemberSelector(Selector=SessionPath) => #17
    #15, #17 -> Zip
    -> Format(Format={0}/{1}, Selector="Item1, Item2")
    -> PropertyMapping(Destination) => #20
    #11, #20 -> AllenNeuralDynamics.Core.StartRobocopy(CreateLog=true, Arguments="/E /DCOPY:DAT /R:100 /W:3 /tee", ProcessWindowStyle=Normal) => #21
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RemotePath)
    -> Condition NotNull => #24
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    #21, #24 -> SubscribeWhen
-> Bonsai.Shaders.Delay(DueTime=PT2S)
-> Take(Count=1)
-> WorkflowOutput
